PsychoPy2experiment version="1.84.1"
Settings
  Monitor = testMonitor
  color = $[-1, -1, -1]
  Experiment info = {u'type': u'1', u'g_conn': u'1', u'participant': u'9999', u'num_pract': u'20', u'ef_conn': u'1'}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1024, 764]
  Full-screen window = False
  Save csv file = True
  Save log file = False
  expName = psreff
  Screen = 1
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Routines
  Routine main_ann
    TextComponent text_22
      text = Now comes the concentration game!
      stopVal [duration (s)] = 1.0
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine target_ann
    TextComponent text_24
      text [set every repeat] = $main_cue
      stopVal [duration (s)] = 0.3
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine real_ann
  Routine ev_prompt
    KeyboardComponent ev_resp
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4', '5'
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Begin Routine:
        # this is the question it randomly pulls from the .csv file
        curr_q = current_question

        # this is added because by having an id of the question
        # where the questions are randomised, we can simply store it
        # later
        q_id = sav_mapping
    TextComponent text_5
      text [set every repeat] = $current_question
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    PolygonComponent first
      fillColor = $[0.2, 0.2, 0.2]
      pos = [-0.6, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    PolygonComponent second
      fillColor = $[0.2, 0.2, 0.2]
      pos = [-0.3, -0.6]
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    PolygonComponent third
      fillColor = $[0.2, 0.2, 0.2]
      pos = [0, -0.6]
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    PolygonComponent fourth
      fillColor = $[0.2, 0.2, 0.2]
      pos = [0.3, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    PolygonComponent fifth
      fillColor = $[0.2, 0.2, 0.2]
      pos = [0.6, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    TextComponent text_12
      text = 1
      pos = [-0.6, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_13
      text = 2
      pos = [-0.3, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_14
      text = 3
      pos = [0.0, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_15
      text = 4
      pos = [0.3, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_16
      text = 5
      pos = [0.6, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine prac_ann_2
  Routine cross_start
    CodeComponent code_5
      Begin Routine:
        curr_t = min(2.1, max(0, random.gauss(520, 0.5)))
        main_cue = cue
    TextComponent text
      text = +
      stopVal [duration (s)] = $curr_t
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine prac_ann
    TextComponent text_8
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        First a series of practice trials
        will follow to familiarise you with this game!
    TextComponent text_10
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine effort_ann
    TextComponent text_23
      text = Now comes the squeeze game!
      stopVal [duration (s)] = 1.0
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine effort_task
    TextComponent text_11
      text = Effort task placeholder
      stopVal [duration (s)] = 1.0
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_9
      Begin Routine:
        # let's say we store participant data here.

        curr_contr = 0
        rew_multpl = 0
      End Routine:
        # save data on a per trial basis
        stor_eff[str(abs_trial)] = [curr_contr, rew_multpl]


        # run_ev, run_effort, run_stroop
        if type == 2:
            run_ev, run_stroop, run_effort, run_rew = 0, 0, 0, 1

            run_prac = 0
            if abs_trial == num_pract:
                run_real = 1

        elif type == 3:
            run_prac = 0 # this needs to be here in order to prevent
                         # it from popping up unnecessarily
            run_effort, run_ev, run_stroop, run_rew = 0, 1, 0, 0
        elif type == 4:
            run_effort, run_stroop, run_ev, run_rew = 0, 1, 0, 0
        elif type == 5:
            run_stroop, run_ev, run_effort, run_rew = 0, 0, 0, 1

            run_prac = 0
            if abs_trial == num_pract:
                run_real = 1

        elif type == 6:
            run_stroop, run_effort, run_ev, run_rew = 0, 0, 1, 0

        # here we would get the response from an individual in terms of
        # the exerted effort. the question is now if this will be
        # dynamic or just a static value in the end

        # we will make it such that the data on the ev will be automatically repeated
        # the good thing about that is that it will be very easy to analyse in both python and r

        trial_l = sorted([int(el) for el in stor_ev.keys()])
        str_abs_t = str(abs_trial)

        if type == 2 or type == 5:

            for t in trial_l:
                str_t = str(t)
                data.write("{}\t{}\t{}\t{}\t{}\t{}\t{}\t{} \
                            {}\t{}\t{}\t{}\t{}\t{}\t{}\n".format(str_abs_t,                # abs_trial
                                                                 curr_reward,          # current reward type
                                                                 stor_ev[str_t][0],    # question
                                                                 stor_ev[str_t][1],     # response
                                                                 stor_ev[str_t][2],  # reaction time
                                                                 stor_eff[str_abs_t][0],     # trial contraction
                                                                 stor_eff[str_abs_t][1],     # reward multiplier | actual reward to be paid
                                                                 stor_main[str_abs_t][0],  # first stim
                                                                 stor_main[str_abs_t][1],  # go or no go
                                                                 stor_main[str_abs_t][2],  # response
                                                                 stor_main[str_abs_t][3],  # response rt
                                                                 stor_main[str_abs_t][4],  # reward
                                                                 stor_gust[str_abs_t][0],  # pump
                                                                 stor_gust[str_abs_t][1],  # times pumped
                                                                 stor_gust[str_abs_t][2]))  # amount
  Routine instr1
    KeyboardComponent instr1_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Begin Experiment:
        import random, os, serial

        # we add + 1 just to make key type be either 1 or 2
        # If axcpt_key_type == 1 then:
        # key 'f' denotes X did follow A
        # key 'k' denotes A was not followed by X or
        #                 X was not preceeded by A

        # if axcpt_key_type == 2 then, the opposite is true:
        # key 'k' denotes X did follow A
        # key 'f' denotes A was not followed by X or
        #                 X was not preceeded by A

        axcpt_key_type = int(round(random.random())) + 1

        # define colours used in the questions
        opt_1, opt_2, opt_3, opt_4, opt_5 = [0.2, 0.2, 0.2], \
                                            [0.2, 0.2, 0.2], \
                                            [0.2, 0.2, 0.2], \
                                            [0.2, 0.2, 0.2], \
                                            [0.2, 0.2, 0.2]

        # feedback color, may not be used in the future
        feed_col = [-1, -1, -1]

        # absolute trial counter; including practice trials
        abs_trial = 1

        # used to run either practice or real trials
        run_prac = 1
        run_real = 0


        # needs to be stored
        # - ev response and RT
        # - stroop response and RT
        # - squeeze data, will be added later


        # storage containers
        stor_ev = {}
        stor_eff = {}
        stor_main = {}
        pump_vol = {} # this gives us a clear mapping between volume and commands to send


        # clear mapping to make sure we know how much to send

        ctr = 1
        pump_vol = {}
        stringed_ctr = str(ctr)
        for vol in range(100, 4100, 100):
            while stringed_ctr[-1] == '8' or stringed_ctr[-1] == '9':
                ctr += 1
                stringed_ctr = str(ctr)
            else:
                pump_vol[str(vol)] = ctr
                ctr += 1
                stringed_ctr = str(ctr)
      Begin Routine:
        # Depending on 'type' that's put in, we manually construct the
        # experimental design matrix such that counterbalancing is achieved
        # the ugly psychopy output file that would be obtained through this
        # will then be discarded and a custom saving script will be used
        # it isn't necessary to have the complete matrix layout written out
        # in all cases, but I am doing it here for sake of completeness

        type = int(expInfo['type'])

        run_ev, run_effort, run_stroop, run_rew = 1, 1, 1, 1

        # run_ev, run_effort, run_stroop, run_rew
        # here run_rew can be defined as 1 in all conditions
        # because it will be changed during the task flow


        if type == 1:
            run_ev, run_effort, run_stroop, run_rew = 1, 1, 1, 1
        elif type == 2:
            run_ev, run_stroop, run_effort, run_rew = 1, 0, 0, 1
        elif type == 3:
            run_effort, run_ev, run_stroop, run_rew  = 1, 0, 0, 1
        elif type == 4:
            run_effort, run_stroop, run_ev, run_rew  = 1, 0, 0, 1
        elif type == 5:
            run_stroop, run_ev, run_effort, run_rew  = 1, 0, 0, 1
        elif type == 6:
            run_stroop, run_effort, run_ev, run_rew  = 1, 0, 0, 1

        # open datafile in the beginning
        exp_name = str(expName)
        sub_id = str(expInfo['participant'])
        dat = str(expInfo['date'])

        # number of practice trials | default is 20
        num_pract = int(expInfo['num_pract'])

        # connection is set at 1 as default, meaning we want to connect gustaf
        gust_connected = str(expInfo['gust_conn'])

        # connection is set at 1 as default, meaning we want to connect the phys dev
        eff_connected = str(expInfo['ef_conn'])

        out_type = str(type) # we do this to avoid issues with reconverting type over and over

        # get current working directory
        cwd = os.getcwd()

        # filename
        fname = exp_name + '_' + sub_id + '_' + out_type  + '.txt'

        # open a text file
        data = open(cwd + '\\data', fname, 'w')

        # in the first row we save header columns | add the others later

        data.write('trial\tcurr_rew\tquestion\tresponse\tresp_rt\ttrial_conc\trew_mult\tmain_st\tgng\tresp_m\tresp_m_rt\trew_m\tpump\tpump_tim\tpump_vol\n')

        # if we want to connect the gustatory device
        if gust_connected == 1:

            # set up gustaf connection

            timeout = 0
            params = {
                'timeout'  : timeout,
                'baudrate' : 19200,
                'bytesize' : serial.EIGHTBITS,
                'parity'   : serial.PARITY_NONE,
                'stopbits' : serial.STOPBITS_ONE,
            }

            dev = serial.Serial('COM3', **params)

            # Keep in mind there should be at least a 10ms difference
            # between changing amount of juice and the actual squirting
            # sequence itself.

            # safety feature to make sure port is open
            if(dev.isOpen() == False):
                dev.open()
    TextComponent text_7
      text = Instructions placeholder
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_9
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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  Routine rew_ann
    CodeComponent code
      Begin Routine:
        if reward_type == 1:
            curr_reward = 'juice.png'
        else:
            curr_reward = 'pound.png'
      End Routine:
        # run_ev, run_effort, run_stroop
        if type == 2:
            run_ev, run_stroop, run_effort, run_rew = 1, 0, 0, 0
            abs_trial += 1
        elif type == 3:
            run_effort, run_ev, run_stroop, run_rew = 1, 0, 0, 0
            abs_trial += 1
        elif type == 4:
            abs_trial += 1
            run_effort, run_stroop, run_ev, run_rew = 1, 1, 0, 0
        elif type == 5:
            run_stroop, run_ev, run_effort, run_rew = 1, 0, 0, 0
            abs_trial += 1
        elif type == 6:
            run_stroop, run_effort, run_ev, run_rew = 1, 0, 0, 0
            abs_trial += 1
    TextComponent text_2
      text = On this trial you will play for:
      stopVal [duration (s)] = 3
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image
      stopVal [duration (s)] = 3
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      image [set every repeat] = $curr_reward
      size = (1, 1)
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  Routine cross_iti
    CodeComponent code_3
      Begin Routine:
        curr_t = min(3.8, max(0.6, random.gauss(1, 0.5)))

        # denotes current first trial num of a new vector of questions
        # following each trial
        sub_trial = 1
    TextComponent cross_sign
      text = +
      stopVal [duration (s)] = $curr_t
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine stroop_cue_2
    TextComponent text_3
      text [set every repeat] = $axcpt_cue
      stopVal [duration (s)] = 0.3
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine ev_feedback
    CodeComponent code_7
      Begin Routine:
        if ev_resp.keys == '1':
            opt_1 = [1, 0.84, 0.0]
            opt_2, opt_3, opt_4, opt_5 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]
        elif ev_resp.keys == '2':
            opt_2 = [1, 0.84, 0.0]
            opt_1, opt_3, opt_4, opt_5 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]
        elif ev_resp.keys == '3':
            opt_3 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_4, opt_5 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]
        elif ev_resp.keys == '4':
            opt_4 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_3, opt_5 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]
        elif ev_resp.keys == '5':
            opt_5 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_3, opt_4 = [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2], \
                                          [0.2, 0.2, 0.2]


        stor_ev[str(sub_trial)] = [q_id, int(ev_resp.keys), ev_resp.rt]
      End Routine:
        # run_ev, run_effort, run_stroop
        if type == 1:
            abs_trial += 1
        if type == 2:
            run_ev, run_stroop, run_effort, run_rew = 0, 1, 0, 0
        elif type == 3:
            run_effort, run_ev, run_stroop, run_rew = 0, 0, 1, 0
        elif type == 4:
            run_effort, run_stroop, run_ev, run_rew = 0, 0, 0, 1

            run_prac = 0
            if abs_trial == num_pract:
                run_real = 1


        elif type == 5:
            run_stroop, run_ev, run_effort, run_rew = 0, 0, 1, 0
        elif type == 6:
            run_stroop, run_effort, run_ev, run_rew = 0, 0, 0, 1

            run_prac = 0

            if abs_trial == num_pract:
                run_real = 1




        # for EV our data structure looks like this:
        # 'trial':[question_id, response, rt]


        sub_trial += 1
    PolygonComponent first_feedback
      fillColor [set every repeat] = $opt_1
      stopVal [duration (s)] = 1
      pos = [-0.6, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    PolygonComponent second_feedback
      fillColor [set every repeat] = $opt_2
      stopVal [duration (s)] = 1
      pos = [-0.3, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    PolygonComponent third_feedback
      fillColor [set every repeat] = $opt_3
      stopVal [duration (s)] = 1
      pos = [0.0, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    PolygonComponent fourth_feedback
      fillColor [set every repeat] = $opt_4
      stopVal [duration (s)] = 1
      pos = [0.3, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    PolygonComponent fifth_feedback
      fillColor [set every repeat] = $opt_5
      stopVal [duration (s)] = 1
      pos = [0.6, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    TextComponent text_17
      text = 1
      stopVal [duration (s)] = 1.0
      pos = [-0.6, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_18
      text = 2
      stopVal [duration (s)] = 1.0
      pos = [-0.3, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_19
      text = 3
      stopVal [duration (s)] = 1.0
      pos = [0.0, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_20
      text = 4
      stopVal [duration (s)] = 1.0
      pos = [0.3, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_21
      text = 5
      stopVal [duration (s)] = 1.0
      pos = [0.6, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine var_time
    CodeComponent code_10
      Each Frame:
        #curr_t = min(3.8, max(0.6, random.gauss(1, 0.5)))
    KeyboardComponent main_resp
      forceEndRoutine = False
      allowedKeys = 'f', 'k'
      startVal [time (s)] = 0.0
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  Routine effort_instr
    TextComponent text_25
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Depending on how strongly you will squeeze,
        this will impact how much reward you will get!
  Routine trial
  Routine target_feed
    CodeComponent code_6
      Begin Routine:
        if  main_resp.keys == 'f':
            part_resp = 1
        elif main_resp.keys == 'k':
            part_resp = 2


        if correct_response == 1 and part_resp == 1 or \
            correct_response == 2 and part_resp == 2:

            given_feedback = "correct.png"
        else:
            given_feedback = "wrong.png"
      End Routine:
        # run_ev, run_effort, run_stroop
        if type == 1:

            run_prac = 0
            if abs_trial == num_pract:
            run_real = 1

        if type == 2:
            run_ev, run_effort, run_stroop, run_rew = 0, 1, 0, 0
        elif type == 3:
            run_effort, run_ev, run_stroop, run_rew = 0, 0, 0, 1

            run_prac = 0
            if abs_trial == num_pract:
                run_real = 1

        elif type == 4:
            run_effort, run_stroop, run_ev, run_rew = 0, 0, 1, 0
        elif type == 5:
            run_stroop, run_ev, run_effort, run_rew = 0, 1, 0, 0
        elif type == 6:
            run_stroop, run_effort, run_ev, run_rew = 0, 1, 0, 0


        pump_selecter = ['\13', '\14', '\15', '\16']
        pumps = ['\1', '\2', '\3', '\4']

        if current_rew == 'juice.png' and \
           given_feedback == 'correct.png':
            dev.write('\1') # send juice squirt
            gus_fed = dev.readlines()

        # we parse the feedback - we can convert from hexadecimal here

        gus_fed = gus_fed[0]
        if len(gus_fed) == 3: # we know that if the length is 3 then it sent extra information
            act_pump = gus_fed[0] # because the default setting is to send information on 1ml
            act_pump_nr = gus_fed[1]
            act_vol = int(gustaf_feedback[2].encode('hex'), 16)*1000
        else:
            act_pump = gus_fed[0]
            act_pump_nr = gus_fed[1]
            act_vol = 1000


        # save data on a per trial basis
        stor_main[str(abs_trial)] = []
        stor_main[str(abs_trial)] = []



        trial_l = sorted([int(el) for el in stor_ev.keys()])
        str_abs_t = str(abs_trial)

        if type == 1 or type == 3:

            for t in trial_l:
                str_t = str(t)
                data.write("{}\t{}\t{}\t{}\t{}\t{}\t{}\t{} \
                            {}\t{}\t{}\t{}\t{}\t{}\t{}\n".format(str_abs_t,                # abs_trial
                                                                 curr_reward,          # current reward type
                                                                 stor_ev[str_t][0],    # question
                                                                 stor_ev[str_t][1],     # response
                                                                 stor_ev[str_t][2],  # reaction time
                                                                 stor_eff[str_abs_t][0],     # trial contraction
                                                                 stor_eff[str_abs_t][1],     # reward multiplier | actual reward to be paid
                                                                 stor_main[str_abs_t][0],  # first stim
                                                                 stor_main[str_abs_t][1],  # go or no go
                                                                 stor_main[str_abs_t][2],  # response
                                                                 stor_main[str_abs_t][3],  # response rt
                                                                 stor_main[str_abs_t][4],  # reward
                                                                 stor_gust[str_abs_t][0],  # pump
                                                                 stor_gust[str_abs_t][1],  # times pumped
                                                                 stor_gust[str_abs_t][2]))  # amount
    PolygonComponent feedback
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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  Routine stroop_target
    TextComponent text_4
      text [set every repeat] = $axcpt_target
      stopVal [duration (s)] = 0.3
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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    KeyboardComponent axcpt_resp
      forceEndRoutine = True
      allowedKeys = 'f', 'k'
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Each Frame:
        curr_t = min(3.8, max(0.6, random.gauss(1, 0.5)))

        if axcpt_resp.keys:
            feed_col = [1, 1, 1]
            responded = 0.5
            done = 2
        else:
            feed_col = [-1, -1, -1]
  Routine ev_save
    CodeComponent code_11
      Begin Routine:
        # we sort and order the keys because they correspond to the trials


        trial_l = sorted([int(el) for el in stor_ev.keys()])
        str_abs_t = str(abs_trial)

        if type == 4 or type == 6:

            for t in trial_l:
                str_t = str(t)
                data.write("{}\t{}\t{}\t{}\t{}\t{}\t{}\t{} \
                            {}\t{}\t{}\t{}\t{}\t{}\t{}\n".format(str_abs_t,                # abs_trial
                                                                 curr_reward,          # current reward type
                                                                 stor_ev[str_t][0],    # question
                                                                 stor_ev[str_t][1],     # response
                                                                 stor_ev[str_t][2],  # reaction time
                                                                 stor_eff[str_abs_t][0],     # trial contraction
                                                                 stor_eff[str_abs_t][1],     # reward multiplier | actual reward to be paid
                                                                 stor_main[str_abs_t][0],  # first stim
                                                                 stor_main[str_abs_t][1],  # go or no go
                                                                 stor_main[str_abs_t][2],  # response
                                                                 stor_main[str_abs_t][3],  # response rt
                                                                 stor_main[str_abs_t][4],  # reward
                                                                 stor_gust[str_abs_t][0],  # pump
                                                                 stor_gust[str_abs_t][1],  # times pumped
                                                                 stor_gust[str_abs_t][2]))  # amount
Flow
  Routine instr1
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = main_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': u'A', 'reward_type': 1, 'target': u'X'},
      {'cue': u'A', 'reward_type': 2, 'target': u'X'},
      {'cue': u'A', 'reward_type': 1, 'target': u'Y'},
      {'cue': u'A', 'reward_type': 1, 'target': u'Y'},
      {'cue': u'B', 'reward_type': 2, 'target': u'Y'},
      {'cue': u'B', 'reward_type': 2, 'target': u'X'},
      {'cue': u'A', 'reward_type': 1, 'target': u'X'},
      {'cue': u'B', 'reward_type': 2, 'target': u'X'},
      {'cue': u'A', 'reward_type': 1, 'target': u'Y'}]
    LoopInitiator prac_info loopType="TrialHandler"
      loopType = random
      nReps = $run_prac
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      Routine prac_ann
    LoopTerminator prac_info
    LoopInitiator real_info loopType="TrialHandler"
      loopType = random
      nReps = $run_real
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      Routine real_ann
    LoopTerminator real_info
    LoopInitiator rew_role loopType="TrialHandler"
      loopType = random
      nReps = run_rew
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      Routine cross_iti
      Routine rew_ann
    LoopTerminator rew_role
    LoopInitiator ev_role loopType="TrialHandler"
      loopType = random
      nReps = run_ev
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      Routine cross_iti
      LoopInitiator cb_loop2 loopType="TrialHandler"
        conditionsFile = ev.csv
        loopType = random
        nReps = 1
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        conditions:
          [{'current_question': u'firstq'},
          {'current_question': u'secondq'},
          {'current_question': u'thirdq'},
          {'current_question': u'fourthq'}]
        Routine ev_prompt
        Routine ev_feedback
      LoopTerminator cb_loop2
      Routine ev_save
    LoopTerminator ev_role
    LoopInitiator effort_role loopType="TrialHandler"
      loopType = random
      nReps = run_effort
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      Routine effort_ann
      Routine effort_instr
      Routine cross_iti
      LoopInitiator cb_loop3 loopType="TrialHandler"
        loopType = random
        nReps = 5
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        Routine effort_task
      LoopTerminator cb_loop3
    LoopTerminator effort_role
    LoopInitiator stroop_role loopType="TrialHandler"
      loopType = random
      nReps = run_stroop
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      Routine stroop_ann
      Routine cross_start
      Routine stroop_cue
      Routine var_time
      Routine stroop_feed
      Routine cross_iti
    LoopTerminator stroop_role
  LoopTerminator main_loop
